# 1 "/opt/topspin3.5pl6/exp/stan/nmr/lists/pp/user/inept.juga"
;inept2d.adla

;$OWNER=adla
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;version (13/08/19)

;$COMMENT=definition of external trigger output, conn I pin 1
;$CLASS=Solids INCL
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;$Id: 6u setnmr3|28 \n 4u  setnmr3^28.incl,v 1.6.2.1 2013/08/29 14:03:54 ber Exp $
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"acqt0=-p1*2/3.1416"


"in0=inf1" 
"d4=1/(4*cnst2)"
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;compensation delays
;p1>p2
"d5=p1-p2"
"d6=d5/2"
;"d0=6u"

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; dimension 1D; AQ_mode 
define delay MCWRK
define delay MCREST
"MCREST = 30m - 0.500000*30m"
"MCWRK = 0.500000*30m"

    dccorr
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1 ze
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2 MCWRK do:f2
  MCREST
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  d1
  6u setnmr3|28 \n 4u  setnmr3^28
  "d10=d0/2"
;90 1H
  (p2 pl2 ph1):f2
  3u
;t1 evolution
  d10
  (p1*2 pl11 ph10):f1
  d10
;spin echo
  d4
  (d5 p2*2 ph2):f2 (p1*2 pl11 ph4):f1
  d4
;PT
  (d6 p2 ph3):f2 (p1 pl11 ph5):f1
;spin echo
  d4
  (d5 p2*2 ph2):f2 (p1*2 pl11 ph6):f1
  d4
  1u pl12:f2
  1u cpd2:f2
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  go=2 ph31 finally do:f2
  1m do:f2
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  MCWRK  wr #0
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  1m do:f2
exit

ph10= 0
ph1 = 0 0 0 0 0 0 0 0 2 2 2 2 2 2 2 2
ph2 = 0 2
ph3 = 1 1 3 3
ph4 = 0 2
ph5 = 0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
ph6 = 0 2 0 2 1 3 1 3
ph31= 0 0 2 2 1 1 3 3
